Key	Value
CellProfiler_Version	3.1.8
ChannelType_PLA G0 and TVPmutAB composite RGB	Color
ImageSet_Zip_Dictionary	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
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:PLA G0 and TVPmutAB composite RGB
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:PLA G0 and TVPmutAB composite RGB
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:PLA
    Convert green to gray?:Yes
    Name the output image:Actin
    Convert blue to gray?:Yes
    Name the output image:DNA
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:PLA
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:PLA
    Name the primary objects to be identified:PLA
    Typical diameter of objects, in pixel units (Min,Max):1,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
RelateObjects:[module_num:9|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
    Parent objects:Cells
    Child objects:PLA
    Name the output object:PLAperCELL
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:PLA
    Name the output object:PLAperNUCLEI
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PLA G0 and TVPmutAB composite RGB
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:PLA
    Select outline color:#FEFEFE
    Select objects to display:Cells

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:PLA G0 and TVPmutAB composite RGB
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:PLA|Location_Center_Y,PLA|Location_Center_X,PLA|Location_Center_Z,PLA|Parent_Cells,PLA|Parent_Nuclei,PLA|Number_Object_Number,Nuclei|Number_Object_Number,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Location_Center_Z,Nuclei|Children_Cells_Count,Nuclei|Children_PLA_Count,Cells|Number_Object_Number,Cells|Children_PLA_Count,Cells|Parent_Nuclei,Cells|Location_Center_Y,Cells|Location_Center_X,Cells|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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"
Run_Timestamp	2019-06-19T17:24:57.077890
